PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  expName = posner
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Routines
  Routine trial
    PolygonComponent cue
      durationEstim = 0.2
      fillColor = $[1,1,1]
      nVertices = 3
      ori [set every repeat] = cueOri
      shape = triangle
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 12
      units = height
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    PolygonComponent target
      fillColor = MediumSeaGreen
      lineColor = SeaGreen
      pos [set every repeat] = (targetX, 0)
      shape = regular polygon...
      size = (0.2,0.2)
      startEstim = 0.2
      startVal [frame N] = 12
      stopVal [duration (s)] = 1.0
      units = height
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startEstim = 0.2
      startVal [frame N] = 12
      storeCorrect = True
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  Routine instruct
    TextComponent instructText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press the left and right keys as
        to indicate the side where
        you saw the green square.

        Try to respond as quickly and accurately as you can.

        Press any key when you're ready to start
    KeyboardComponent instructEnd
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      lineWidth = 2
      nVertices = 20
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      units = height
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'cueSide': 'right', 'corrAns': 'right', 'targetX': 500, 'cueOri': 90},
      {'cueSide': 'right', 'corrAns': 'right', 'targetX': 500, 'cueOri': 90},
      {'cueSide': 'right', 'corrAns': 'right', 'targetX': 500, 'cueOri': 90},
      {'cueSide': 'right', 'corrAns': 'right', 'targetX': 500, 'cueOri': 90},
      {'cueSide': 'left', 'corrAns': 'left', 'targetX': -500, 'cueOri': -90},
      {'cueSide': 'left', 'corrAns': 'left', 'targetX': -500, 'cueOri': -90},
      {'cueSide': 'left', 'corrAns': 'left', 'targetX': -500, 'cueOri': -90},
      {'cueSide': 'left', 'corrAns': 'left', 'targetX': -500, 'cueOri': -90},
      {'cueSide': 'left', 'corrAns': 'right', 'targetX': 500, 'cueOri': -90},
      {'cueSide': 'right', 'corrAns': 'left', 'targetX': -500, 'cueOri': 90}]
    Routine ITI
    Routine trial
  LoopTerminator trials
  Routine thanks
