PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  JS libs = remote
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = rotatingFaces
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Routines
  Routine trial
    ImageComponent face
      image [set every repeat] = $imageFile
      ori [set every frame] = $t*180
      size [set every frame] = t*40
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = faceConditions.csv
    loopType = random
    nReps = 5
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    conditions:
      [{'imageFile': 'faces/face01.jpg'},
      {'imageFile': 'faces/face02.jpg'},
      {'imageFile': 'faces/face03.jpg'}]
    Routine trial
  LoopTerminator trials
