PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = False
  JS libs = remote
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = use prefs
  Window size (pixels) = [600,400]
  expName = gradualReveal
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Routines
  Routine trial
    TextboxComponent sentence
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = When will participants get the surprise of this banana?
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    PolygonComponent mask
      fillColor = grey
      lineColor = grey
      pos [set every frame] = (t*0.5, 0)
      shape = rectangle
      size = (2, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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Flow
  Routine trial
