PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = rotating_eyes2
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Routines
  Routine trial
    PolygonComponent left_eye
      fillColor = white
      pos = (-0.3, 0)
      shape = circle
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent left_pupil
      fillColor = black
      lineColor = black
      pos [set every frame] = (-0.3+sin(t*2)/10, 0)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent right_eye
      fillColor = white
      pos = (0.3, 0)
      shape = circle
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent right_pupil
      fillColor = black
      lineColor = black
      pos [set every frame] = (0.3+sin(t*2)/10, 0)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine trial
