PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1536, 864]
  expName = SWB_debug
  keyboardBackend = ioHub
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Routines
  Routine SetupGraphics
    CodeComponent AdjustPosition
      Code Type = Both
      Begin JS Routine:
        if ((RiskSide === "left")) {
            safex = 0.25;
            gamblex = (- 0.25);
        } else {
            safex = (- 0.25);
            gamblex = 0.25;
        }

        topAmt="$" + TopAmt.toFixed(2);
        bottomAmt="$" + BottomAmt.toFixed(2);
        certainAmt="$" + CertainAmt.toFixed(2);

        totalWin="Total\n" + total.toFixed(2);

        psychoJS.eventManager.clearEvents(Keys);
      Begin Routine:
        if RiskSide == 'left':
            safex = .25
            gamblex = -.25
        else:
            safex = -.25
            gamblex = .25

        topAmt='$%0.2f'%(TopAmt)
        bottomAmt='$%0.2f'%(BottomAmt)
        certainAmt='$%0.2f'%(CertainAmt)

        totalWin='Total\n$%0.2f'%(total)

        event.clearEvents(Keys)
  Routine SetColorChange
    CodeComponent ColorButton
      Code Type = Both
      Begin Routine:
        if Mouse.clicked_name == 'Safe':
            safecolor = 'red'
        elif Mouse.clicked_name == 'Top':
            topcolor = 'red'
        elif Mouse.clicked_name =='Bottom':
            bottomcolor = 'red'
  Routine Cue
    CodeComponent trialTimer
      Code Type = Auto->JS
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      Begin Routine:
        startTime = globalClock.getTime()
        revealRoutines = 1;
        timeoutRoutine = 0;
      Each Frame:
        #increment trial counter each frame
        if globalClock.getTime() - startTime >= maxTime:
            #LCTTrials.finished = True; #what is this for?
            revealRoutines = 0;
            timeoutRoutine = 1;
            continueRoutine = False;
    PolygonComponent LeftHalf
      fillColor = white
      lineColor = black
      pos = (-.25, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent RightHalf
      fillColor = white
      lineColor = black
      pos = (.25, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent Safe
      fillColor = white
      lineColor = black
      lineWidth = 5
      pos [set every repeat] = (safex,safey)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent Top
      fillColor = white
      lineColor = black
      lineWidth = 5
      pos [set every repeat] = (gamblex, gambletop)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent Bottom
      fillColor = white
      lineColor = black
      lineWidth = 5
      pos [set every repeat] = (gamblex, gamblebottom)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent SafeText
      color = black
      letterHeight = 0.06
      pos [set every repeat] = (safex, safey)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $certainAmt
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    TextComponent TopText
      color = black
      letterHeight = 0.06
      pos [set every repeat] = (gamblex, gambletop)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $topAmt
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    TextComponent BottomText
      color = black
      letterHeight = 0.06
      pos [set every repeat] = (gamblex, gamblebottom)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $bottomAmt
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    PolygonComponent Total
      fillColor = $[0,0,0]
      pos = (-.45, .3)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Win
      letterHeight = 0.03
      pos = (-.45, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $totalWin
      wrapWidth = .22
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    KeyboardComponent Keys
      allowedKeys [set every repeat] = ['left','right']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent Mouse
      clickable = RightHalf,LeftHalf
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent countHowHappy
      Code Type = Both
      Before Experiment:
        trialN = 1
        doHowHappy = 0
      Before JS Experiment:
        var trialN = 1;
        var doHowHappy = 0;
      End JS Routine:
        if ((trialN >= 3)) {
            trialN = 1;
            doHowHappy = 1;
        } else {
            trialN += 1;
            doHowHappy = 0;
        }
      End Routine:
        if trialN  >= 3:
            trialN = 1
            doHowHappy = 1
        else:
            trialN +=1
            doHowHappy = 0
  Routine defined
    CodeComponent define_variables
      Code Type = Both
      Before Experiment:
        total = 10
        maxTime = 8
      Before JS Experiment:
        var total = 10;
        var maxTime = 8;
      Begin Experiment:
        safecolor = 'black'
        topcolor = 'black'
        bottomcolor = 'black'

        safey = 0
        safex = .25
        gambletop = .25
        gamblebottom = -.25
        gamblex = -.25
        winy=.2

        total = 10
      Begin JS Experiment:
        safecolor = "black";
        topcolor = "black";
        bottomcolor = "black";
        safey = 0;
        safex = 0.25;
        gambletop = 0.25;
        gamblebottom = (- 0.25);
        gamblex = (- 0.25);
        winy = 0.2;
        total = 10;
  Routine Calculate
    CodeComponent DetermineColor
      Code Type = Both
      Begin JS Routine:
        //js version bug: always selects left side...
        right = false;
        rightx = false;
        left = false;
        leftx = false;

        right = Boolean(psychoJS.eventManager.getKeys({keyList:['right']}).length > 0);
        left = Boolean(psychoJS.eventManager.getKeys({keyList:['left']}).length > 0);

        XY = Mouse.getPos();
        if( XY[0] > 0 ) {
            rightx = true;
            leftx = false;
        } else {
            rightx = false;
            leftx = true;
        }

        if (((RiskSide === "right") && (left||leftx)))  {
            safecolor = "yellow";
            topcolor = "black";
            bottomcolor = "black";
            Gamble = false;
        } else {
            if (((RiskSide === "right") && (right||rightx)))  {
                safecolor = "black";
                topcolor = "yellow";
                bottomcolor = "yellow";
                Gamble = true;
            } else {
                if (((RiskSide === "left") && (left||leftx)))  {
                    safecolor = "black";
                    topcolor = "yellow";
                    bottomcolor = "yellow";
                    Gamble = true;
                } else {
                    if (((RiskSide === "left") && (right||rightx))) {
                        safecolor = "yellow";
                        topcolor = "black";
                        bottomcolor = "black";
                        Gamble = false;
                    }
                }
            }
        }

        //Set Gamble outcome
        if ((Outcome === "top")) {
            GambleAmt = TopAmt;
            OtherAmt = BottomAmt;
        } else {
            GambleAmt = BottomAmt;
            OtherAmt = TopAmt;
        }
        if (Gamble) {
            Change = GambleAmt;
        } else {
            Change = CertainAmt;
            //only update total now if safebet
            total = total + Change;
            totalWin="Total\n$" + total.toFixed(2);
        }

        winColor = "black";
        if (Gamble) {
            winText = "";
        } else {
            if ((Change > 0)) {
                winText = "You won $" + Change.toFixed(2);
            } else {
                if ((Change === 0)) {
                    winText = "You got $" + Change.toFixed(2);
                } else {
                    winText = "You lost $" + Change.toFixed(2);
                }
            }
        }
      Begin Routine:
        # This section is for the mouse selection
        # choose safe
        if (RiskSide=='right') and Mouse.isPressedIn(LeftHalf):
            safecolor = 'yellow'
            topcolor = 'black'
            bottomcolor = 'black'
            Gamble = False
            # choose gamble
        elif (RiskSide=='right') and Mouse.isPressedIn(RightHalf):
            safecolor = 'black'
            topcolor = 'yellow'
            bottomcolor = 'yellow'
            Gamble = True
            #choose gamble
        elif (RiskSide=='left') and Mouse.isPressedIn(LeftHalf):
            safecolor = 'black'
            topcolor = 'yellow'
            bottomcolor = 'yellow'
            Gamble = True
            # choose safe
        elif (RiskSide=='left') and Mouse.isPressedIn(RightHalf):
            safecolor = 'yellow'
            topcolor = 'black'
            bottomcolor = 'black'
            Gamble = False


        # This section is for the keyboard selection
        # choose safe
        if (RiskSide=='right') and event.getKeys(['left']):
            safecolor = 'yellow'
            topcolor = 'black'
            bottomcolor = 'black'
            Gamble = False
        # choose gamble
        elif (RiskSide=='right') and event.getKeys(['right']):
            safecolor = 'black'
            topcolor = 'yellow'
            bottomcolor = 'yellow'
            Gamble = True
         # choose gamble
        elif (RiskSide=='left') and event.getKeys(['left']):
            safecolor = 'black'
            topcolor = 'yellow'
            bottomcolor = 'yellow'
            Gamble = True
        # choose safe
        elif (RiskSide=='left') and event.getKeys(['right']):
            safecolor = 'yellow'
            topcolor = 'black'
            bottomcolor = 'black'
            Gamble = False
         # set the Gamble Outcome
        if Outcome == 'top':
            GambleAmt = TopAmt
            OtherAmt = BottomAmt
        else:
            GambleAmt = BottomAmt
            OtherAmt = TopAmt
        # Set Outcome for this trial
        if Gamble:
            Change = GambleAmt
        else:
            Change = CertainAmt
            #only update total now if safebet
            total = total + Change
            totalWin='Total\n$%0.2f'%(total)


        winColor = 'black'
        if Gamble:
            winText ='' #if chose Gamble - don't display anything (only want to show safebet here
        else:
            if Change > 0:
                winText ='You won $%0.2f!'%(Change)
               # winColor = 'green'
            elif Change == 0:
                winText ='You got $%0.2f!'%(Change)
              #  winColor = 'black'
            else:
                winText ='You lost $%0.2f!'%(Change)
               # winColor = 'red'
  Routine Fixation
    TextComponent Cross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITI
      text = +
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  Routine SelectionShown
    PolygonComponent LeftHalf_2
      fillColor = white
      lineColor = black
      pos = (-.25, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent RightHalf_2
      fillColor = white
      lineColor = black
      pos = (.25, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent Safe_2
      fillColor = white
      lineColor [set every repeat] = $safecolor
      lineWidth = 5
      pos [set every repeat] = (safex,safey)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent Top_2
      fillColor = white
      lineColor [set every repeat] = $topcolor
      lineWidth = 5
      pos [set every repeat] = (gamblex, gambletop)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent Bottom_2
      fillColor = white
      lineColor [set every repeat] = $bottomcolor
      lineWidth = 5
      pos [set every repeat] = (gamblex, gamblebottom)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent SafeText_2
      color = black
      letterHeight = 0.06
      pos [set every repeat] = (safex, safey)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $certainAmt
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    TextComponent TopText_2
      color = black
      letterHeight = 0.06
      pos [set every repeat] = (gamblex, gambletop)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $topAmt
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    TextComponent BottomText_2
      color = black
      letterHeight = 0.06
      pos [set every repeat] = (gamblex, gamblebottom)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $bottomAmt
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    PolygonComponent Total_2
      fillColor = $[0,0,0]
      pos = (-.45, .3)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent Win_2
      letterHeight = 0.03
      pos = (-.45, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $totalWin
      wrapWidth = .22
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    TextComponent WinMsg
      color [set every repeat] = $winColor
      letterHeight = 0.04
      pos [set every repeat] = (safex,winy)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $winText
      wrapWidth = .2
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if Gamble:
            if Change > 0:  #compare GambleAmt vs OtherAmt
                winText ='You won $%0.2f!'%(Change)
                winColor = 'limegreen'
            elif Change < 0:
                winText ='You lost $%0.2f!'%(Change)
                winColor = 'red'
            else: #change, i.e. gambleamt = 0
                if GambleAmt > OtherAmt: #compare GambleAmt vs OtherAmt
                    winText ='You won $%0.2f!'%(Change)
                    winColor = 'limegreen'
                elif GambleAmt < OtherAmt:
                    winText ='You lost $%0.2f!'%(Change)
                    winColor = 'red'
                else:
                    winText = 'how did you get here? $%0.2f!'%(GambleAmt)
                    winColor = 'magenta'
        else:
            if (GambleAmt > CertainAmt):
                safecolor = 'red'
                winText ='You would have won $%0.2f!'%(GambleAmt)
                winColor = 'red'
            else:
                safecolor = 'limegreen'
                winText ='You would have lost $%0.2f!'%(GambleAmt)
                winColor = 'limegreen'
  Routine GambleRevealed
    CodeComponent RevealGamble
      Code Type = Both
      Begin JS Routine:
        //
        if (Gamble) {
            // if chose gamble, add total to outcome
            total = total + Change;
            totalWin="Total\n$" + total.toFixed(2);
            if (((Outcome === "top") && (TopAmt > BottomAmt))) {
                topcolor = "limegreen";
                bottomcolor = "black";
            } else {
                if (((Outcome === "top") && (TopAmt < BottomAmt))) {
                    topcolor = "red";
                    bottomcolor = "black";
                } else {
                    if (((Outcome === "bottom") && (BottomAmt > TopAmt))) {
                        topcolor = "black";
                        bottomcolor = "limegreen";
                    } else {
                        if (((Outcome === "bottom") && (BottomAmt < TopAmt))) {
                            topcolor = "black";
                            bottomcolor = "red";
                        }
                    }
                }
            }
        } else {
            if (Outcome === "top") {
                topcolor = "mediumorchid";
                bottomcolor = "black";
            } else {
                topcolor = "black";
                bottomcolor = "mediumorchid";
            }
        }
      Begin Routine:
        #if Gamble: #skip click error is small
        #    continueRoutine = False

        if Gamble:
        #if chose Gamble:
            #add outcome to total:
            total = total + Change
            totalWin='Total\n$%0.2f'%(total)
            if (Outcome=='top') and (TopAmt>BottomAmt):
                #gamble top was a win
                topcolor = 'limegreen'
                bottomcolor = 'black'
            elif (Outcome=='top') and (TopAmt<BottomAmt):
                #gamble top resulted in loss
                topcolor = 'red'
                bottomcolor = 'black'
            elif (Outcome=='bottom') and (BottomAmt>TopAmt):
                #gamble bottom was a win
                topcolor = 'black'
                bottomcolor = 'limegreen'
            elif (Outcome=='bottom') and (BottomAmt<TopAmt):
                #gamble bottom resulted in loss
                topcolor = 'black'
                bottomcolor = 'red'
        else:
        #if chose safebet : purple and black
            if (Outcome=='top'):
                #gamble top was a win
                topcolor = 'mediumorchid'
                bottomcolor = 'black'
            else:
                #gamble bottom was a win
                topcolor = 'black'
                bottomcolor = 'mediumorchid'
    PolygonComponent LeftHalf_3
      fillColor = white
      lineColor = black
      pos = (-.25, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent RightHalf_3
      fillColor = white
      lineColor = black
      pos = (.25, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent Safe_3
      fillColor = white
      lineColor [set every repeat] = $safecolor
      lineWidth = 5
      pos [set every repeat] = (safex,safey)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent Top_3
      fillColor = white
      lineColor [set every repeat] = $topcolor
      lineWidth = 5
      pos [set every repeat] = (gamblex, gambletop)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent Bottom_3
      fillColor = white
      lineColor [set every repeat] = $bottomcolor
      lineWidth = 5
      pos [set every repeat] = (gamblex, gamblebottom)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent SafeText_3
      color = black
      letterHeight = 0.06
      pos [set every repeat] = (safex, safey)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $certainAmt
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    TextComponent TopText_3
      color = black
      letterHeight = 0.06
      pos [set every repeat] = (gamblex, gambletop)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $topAmt
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    TextComponent BottomText_3
      color = black
      letterHeight = 0.06
      pos [set every repeat] = (gamblex, gamblebottom)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $bottomAmt
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    PolygonComponent Total_3
      fillColor = [0,0,0]
      pos = (-.45, .3)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent Win_3
      letterHeight = 0.03
      pos = (-.45, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $totalWin
      wrapWidth = .22
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    TextComponent WinMsg_2
      color [set every repeat] = $winColor
      letterHeight = 0.04
      pos [set every repeat] = (gamblex,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $winText
      wrapWidth = .2
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  Routine HowHappy
    CodeComponent ShowSlider
      Code Type = Both
      Begin JS Routine:
        //if ((Rating === 0)) {
        //   continueRoutine = false;
        //}

        //HowHappySlider.marker.size = [0.05, 0.05];
      Begin Routine:
        #if Rating == 0:
        #    continueRoutine = False


        HowHappySlider.marker.size=(.05,.05)
    SliderComponent HowHappySlider
      fillColor = black
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent UnHappy
      letterHeight = 0.05
      pos = (-.6, 0)
      startVal [time (s)] = 0.0
      text = Very Unhappy
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    TextComponent Happy
      letterHeight = 0.05
      pos = (.6, 0)
      startVal [time (s)] = 0.0
      text = Very Happy
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    KeyboardComponent SliderKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = HowHappySlider.getRating()
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    TextComponent SpacetoExit
      letterHeight = 0.04
      pos = (0, -.4)
      startVal [condition] = HowHappySlider.rating
      text = Press SPACEBAR to Continue
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  Routine Timeout
    TextComponent timeoutText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text = Please respond faster
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  Routine FixationCross
    TextComponent Cross_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITI
      text = +
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  Routine ThankYou
    TextComponent exitText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        [This is the exit screen]

        Thank you for participating in our study!

        what else goes here?
  Routine Welcome
    TextComponent welcomeText1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hello!

        You will be participating in a gambling task that could result in a Cash Reward based on your performance.

        In each trial, you will have the option between a safe bet or a gamble. If you select the safe bet, you will receive that amount of money. You will then be shown what you would have received if you had chosen the gamble.

        Press SPACEBAR to continue
    KeyboardComponent space_to_continue
      allowedKeys = 'space','return'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Welcome2
    TextComponent welcomeText2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If you select the gamble, you will have a 50/50 chance at earning more or less money than the safe bet. The safe bet can be negative, positive, or zero.

        You will make your selection by using with a mouse. A Total Score will be presented in the top left corner of the screen. You will receive the total amount at the end of the experiment.

        Press SPACEBAR to begin the experiment
    KeyboardComponent space_to_continue_2
      allowedKeys = 'space','return'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine defined
  Routine Welcome
  Routine Welcome2
  LoopInitiator trialControl loopType="TrialHandler"
    conditionsFile = control_files/trialControlwRating_test.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TrialType', 'mix'), ('CertainAmt', 0.0), ('TopAmt', -0.3), ('BottomAmt', 0.06), ('Outcome', 'top'), ('RiskSide', 'left'), ('ITI', 1.15), ('Rating', 0)]),
      OrderedDict([('TrialType', 'mix'), ('CertainAmt', 0.0), ('TopAmt', -0.3), ('BottomAmt', 0.09), ('Outcome', 'top'), ('RiskSide', 'right'), ('ITI', 1.24), ('Rating', 0)]),
      OrderedDict([('TrialType', 'mix'), ('CertainAmt', 0.0), ('TopAmt', -0.3), ('BottomAmt', 0.12), ('Outcome', 'bottom'), ('RiskSide', 'right'), ('ITI', 1.3), ('Rating', 1)]),
      OrderedDict([('TrialType', 'mix'), ('CertainAmt', 0.0), ('TopAmt', -0.3), ('BottomAmt', 0.16), ('Outcome', 'top'), ('RiskSide', 'right'), ('ITI', 1.01), ('Rating', 0)]),
      OrderedDict([('TrialType', 'mix'), ('CertainAmt', 0.0), ('TopAmt', -0.3), ('BottomAmt', 0.2), ('Outcome', 'bottom'), ('RiskSide', 'left'), ('ITI', 1.95), ('Rating', 0)]),
      OrderedDict([('TrialType', 'mix'), ('CertainAmt', 0.0), ('TopAmt', -0.3), ('BottomAmt', 0.25), ('Outcome', 'top'), ('RiskSide', 'left'), ('ITI', 1.67), ('Rating', 1)]),
      OrderedDict([('TrialType', 'mix'), ('CertainAmt', 0.0), ('TopAmt', -0.3), ('BottomAmt', 0.3), ('Outcome', 'top'), ('RiskSide', 'left'), ('ITI', 1.66), ('Rating', 0)]),
      OrderedDict([('TrialType', 'mix'), ('CertainAmt', 0.0), ('TopAmt', -0.5), ('BottomAmt', 0.1), ('Outcome', 'bottom'), ('RiskSide', 'right'), ('ITI', 1.26), ('Rating', 0)])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
    Routine SetupGraphics
    Routine Cue
    LoopInitiator revealLoop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = revealRoutines
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      Routine Calculate
      Routine SelectionShown
      Routine GambleRevealed
    LoopTerminator revealLoop
    LoopInitiator timeoutLoop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = timeoutRoutine
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      Routine Timeout
    LoopTerminator timeoutLoop
    LoopInitiator HowHappyCheck loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = doHowHappy
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      Routine HowHappy
    LoopTerminator HowHappyCheck
    Routine Fixation
  LoopTerminator trialControl
  Routine ThankYou
