PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1792, 1120]
  expName = posner
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Routines
  Routine trial
    PolygonComponent cue
      durationEstim = 0.2
      fillColor = $[1,1,1]
      nVertices = 3
      ori [set every repeat] = cueOri
      shape = triangle
      size = (100,200)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 12
      units = pix
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    PolygonComponent target
      fillColor = MediumSeaGreen
      lineColor = SeaGreen
      pos [set every repeat] = (targetX, 0)
      shape = rectangle
      size = (200,200)
      startEstim = 0.2
      startVal [frame N] = 12
      stopVal [duration (s)] = 1.0
      units = pix
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startEstim = 0.2
      startVal [frame N] = 12
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine instruct
    TextComponent instructText
      letterHeight = 1.0
      startVal [time (s)] = 0.0
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      text:
        Press the left and right keys as
        to indicate the side where
        you saw the green square.

        Try to respond as quickly and accurately as you can.

        Press any key when you're ready to start
    KeyboardComponent instructEnd
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      lineWidth = 2
      nVertices = 20
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      units = deg
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'cueSide': 'right', 'corrAns': 'right', 'targetX': 500, 'cueOri': 90},
      {'cueSide': 'right', 'corrAns': 'right', 'targetX': 500, 'cueOri': 90},
      {'cueSide': 'right', 'corrAns': 'right', 'targetX': 500, 'cueOri': 90},
      {'cueSide': 'right', 'corrAns': 'right', 'targetX': 500, 'cueOri': 90},
      {'cueSide': 'left', 'corrAns': 'left', 'targetX': -500, 'cueOri': -90},
      {'cueSide': 'left', 'corrAns': 'left', 'targetX': -500, 'cueOri': -90},
      {'cueSide': 'left', 'corrAns': 'left', 'targetX': -500, 'cueOri': -90},
      {'cueSide': 'left', 'corrAns': 'left', 'targetX': -500, 'cueOri': -90},
      {'cueSide': 'left', 'corrAns': 'right', 'targetX': 500, 'cueOri': -90},
      {'cueSide': 'right', 'corrAns': 'left', 'targetX': -500, 'cueOri': 90}]
    Routine ITI
    Routine trial
  LoopTerminator trials
  Routine thanks
