PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = pineapple-form
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Routines
  Routine survey
    FormComponent form
      Data Format = columns
      Item Padding = 0.05
      Items = form-items.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.05
      size = (1.5, 0.7)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.4, -.4)
      startVal [condition] = form.complete
      text = Click here to submit form
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  Routine feedback
    CodeComponent setFeeback
      Code Type = Auto->JS
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      Begin Routine:
        response = form.getData()[2]['response']
        if response == 'Yes':
            feedback_text = "You are wrong, pineaple has no place on pizza"
        elif response == 'No':
            feedback_text = " You are correct, pineaple has no place on pizza"
        else:
            feedback_text = "You… didn’t answer whether pineapple should go on pizza..."
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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Flow
  Routine survey
  Routine feedback
