PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = word-counter
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Routines
  Routine trial
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextboxComponent wordCount
      bold = False
      color = black
      editable = False
      letterHeight = 0.02
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(len(textbox.text.split()))
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Flow
  Routine trial
