PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  JS libs = remote
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 800]
  expName = heartThrob
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Routines
  Routine trial
    CodeComponent rateCode
      Code Type = Both
      Begin JS Routine:
        //start rating
        thisRating = 3;
      Begin Routine:
        # start rating
        thisRating = 3
      Each Frame:
        if slider.markerPos:
            thisRating = int(slider.markerPos)



        # save this to plot the shape of the wave afterwards
        thisExp.addData('heart_height', heart.size[1])
        thisExp.addData('time_stamp', t)
        # adds a new row to the data file - there will be a row per frame
        thisExp.nextEntry()
      Each JS Frame:
        if (typeof slider._markerPos !== 'undefined') {
            thisRating = slider._markerPos;
            }


        // save this to plot the shape of the wave afterwards
        psychoJS.experiment.addData('heart_size', heart.size)
        psychoJS.experiment.addData('time_stamp', t)
        // adds a new row to the data file - there will be a row per frame
        psychoJS.experiment.nextEntry()
      End JS Routine:
        psychoJS.experiment.addData('final_rating', slider.rating)
      End Routine:
        thisExp.addData('final_rating', slider.rating)
    TextComponent Q
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = How excited does PsychoPy make you feel?
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Click on the slider below to speed up or slow down the heart rate
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    ImageComponent heart
      image = heart_red.png
      size [set every frame] = .25 + .125 * (sin(t*thisRating))**4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = ['Slower', 'Faster']
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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Flow
  Routine trial
