PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 1024]
  expName = muller-lyer
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Routines
  Routine trial
    PolygonComponent refLine
      fillColor = white
      pos = (0, .4)
      shape = regular polygon...
      size [set every repeat] = (lineLength, 0.01)
      startVal [time (s)] = 0.0
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    ImageComponent leftArrow
      image = arrowhead.png
      ori [set every repeat] = leftArrowOri
      pos [set every repeat] = (refLine.size[0]/2*-1, .4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent rightArrow
      image = arrowhead.png
      ori [set every repeat] = rightArrowOri
      pos [set every repeat] = (refLine.size[0]/2, .4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent adjustableLine
      fillColor = white
      shape = regular polygon...
      size [set every frame] = (slider.markerPos, 0.01)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = "Shorter", "Longer"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45', 'triangleMarker')
      styles = rating
      ticks = (0.1, 1.5)
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -.4)
      size = (0.4, 0.05)
      startVal [condition] = slider.rating != None
      text = Click here to submit size
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    CodeComponent checkBias
      Code Type = Auto->JS
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      Begin Routine:
        slider.markerPos = 0.7
      End Routine:
        bias = slider.rating - lineLength
        thisExp.addData('bias', bias)
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'line_length': 0.1, 'arrow_opacity': 0},
      {'line_length': 0.2, 'arrow_opacity': 0},
      {'line_length': 0.3, 'arrow_opacity': 0},
      {'line_length': 0.4, 'arrow_opacity': 0},
      {'line_length': 0.5, 'arrow_opacity': 0},
      {'line_length': 0.6, 'arrow_opacity': 0},
      {'line_length': 0.7, 'arrow_opacity': 0},
      {'line_length': 0.8, 'arrow_opacity': 0},
      {'line_length': 0.9, 'arrow_opacity': 0},
      {'line_length': 1, 'arrow_opacity': 0},
      {'line_length': 0.1, 'arrow_opacity': 1},
      {'line_length': 0.2, 'arrow_opacity': 1},
      {'line_length': 0.3, 'arrow_opacity': 1},
      {'line_length': 0.4, 'arrow_opacity': 1},
      {'line_length': 0.5, 'arrow_opacity': 1},
      {'line_length': 0.6, 'arrow_opacity': 1},
      {'line_length': 0.7, 'arrow_opacity': 1},
      {'line_length': 0.8, 'arrow_opacity': 1},
      {'line_length': 0.9, 'arrow_opacity': 1},
      {'line_length': 1, 'arrow_opacity': 1}]
    Routine trial
  LoopTerminator trials
