PsychoPy2experiment version="2021.2.0"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['Participant'], expName, expInfo['date'])
  Experiment info = {'Age': '99', 'Participant': 'C01', 'Group': "['A', 'B']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  expName = Stroop task with counterbalancing
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = $[1,1,1]
      shape = cross
      size = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent stroopText
      color [set every repeat] = $letterColor
      letterHeight = 0.25
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    CodeComponent trialCode
      Code Type = Auto->JS
      Begin Experiment:
        # lists to hold RTs:
        maori_cong = []
        maori_incong = []
        english_cong = []
        english_incong = []
      End Routine:
        # store RTs in respective lists:
        if response.corr:
            if language == u'Maori':
                if congruent == 1:
                    maori_cong.append(response.rt)
                else:
                    maori_incong.append(response.rt)
            else:
                if congruent == 1:
                    english_cong.append(response.rt)
                else:
                    english_incong.append(response.rt)
  Routine instruct
    TextComponent instructFixed
      letterHeight = 0.1
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      units = norm
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      text:
        A colored word will appear on the screen.

        As quickly as you can, indicate its color by pressing one of these arrow keys:
    TextComponent instructChanging
      letterHeight = 0.1
      pos = [0, -0.1]
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions
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    TextComponent pushSpace
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Push the spacebar when you are ready to begin the task.
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    KeyboardComponent instructResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    CodeComponent thanksCode
      Code Type = Auto->JS
      Begin Routine:
        english_effect = np.mean(english_incong) - np.mean(english_cong)
        english_effect = int(english_effect * 1000)

        maori_effect = np.mean(maori_incong) - np.mean(maori_cong)
        maori_effect = int(maori_effect * 1000)

        english_cong.extend(maori_cong)
        avg_rt = np.mean(english_cong)
        avg_rt = int(avg_rt * 1000)

        #feedback_text.text = str(np.mean(english_incong))
        msg = u'Your standard reaction time was:\n' + str(avg_rt) + ' ms.\n\n'
        msg += u'Your English Stroop effect was:\n' + str(english_effect) + ' milliseconds.\n\n'
        msg += u'Your Māori Stroop effect was:\n' + str(maori_effect) + ' milliseconds.'

        feedbackText.text = msg
    TextComponent feedbackText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Feedback
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    KeyboardComponent thanksResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $'blockOrderGroup'+expInfo['Group']+'.xlsx'
    loopType = sequential
    nReps = 1
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    Routine instruct
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $language + '.xlsx'
      loopType = random
      nReps = 10
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine thanks
