PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = visualSearch2
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Routines
  Routine instruct
    MouseComponent instrMouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextboxComponent instr
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Click the hexagon as
        quickly as possible.

        Press the mouse button to start.
    CodeComponent periodic_pause
      Code Type = Py
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      Begin Routine:
        if trials.thisN % 18 != 0:
            continueRoutine = False
    TextboxComponent blockTxt
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Block: ' + str(trials.thisRepN)
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  Routine ITI
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine trial
    CodeComponent setPositions
      Code Type = Py
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      Begin Experiment:
        x_pos = [-300, -200, -100, -50, 0, 50, 100, 200, 300]
        y_pos = [-300, -200, -100, -50, 0, 50, 100, 200, 300]
      Begin Routine:
        shuffle(x_pos)
        shuffle(y_pos)
        print('target location: ',  (x_pos[0], y_pos[0]))
    PolygonComponent target
      fillColor [set every repeat] = $target_color
      lineColor [set every repeat] = $target_color
      nVertices = 6
      pos [set every repeat] = (x_pos[0], y_pos[0])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_resp
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent distract_1
      fillColor [set every repeat] = $[-1,-1,-1]
      lineColor = $[0,0,0]
      nVertices = 5
      opacity [set every repeat] = opacity_1
      pos [set every repeat] = (x_pos[1], y_pos[1])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_2
      fillColor [set every repeat] = $[-1,-1,-1]
      lineColor = $[0,0,0]
      nVertices = 5
      opacity [set every repeat] = opacity_2
      pos [set every repeat] = (x_pos[2], y_pos[2])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_3
      fillColor [set every repeat] = $[-1,-1,-1]
      lineColor = $[0,0,0]
      nVertices = 5
      opacity [set every repeat] = opacity_3
      pos [set every repeat] = (x_pos[3], y_pos[3])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_4
      fillColor [set every repeat] = $[-1,-1,-1]
      lineColor [set every repeat] = $[0,0,0]
      nVertices = 5
      opacity [set every repeat] = opacity_4
      pos [set every repeat] = (x_pos[4], y_pos[4])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_5
      fillColor [set every repeat] = $[-1,-1,-1]
      lineColor = $[0,0,0]
      nVertices = 5
      opacity [set every repeat] = opacity_5
      pos [set every repeat] = (x_pos[5], y_pos[5])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_6
      fillColor [set every repeat] = $[-1,-1,-1]
      lineColor = $[0,0,0]
      nVertices = 5
      opacity [set every repeat] = opacity_6
      pos [set every repeat] = (x_pos[6], y_pos[6])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_7
      fillColor [set every repeat] = $[-1,-1,-1]
      lineColor = $[0,0,0]
      nVertices = 5
      opacity [set every repeat] = opacity_7
      pos [set every repeat] = (x_pos[7], y_pos[7])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_8
      fillColor [set every repeat] = $[-1,-1,-1]
      lineColor = $[0,0,0]
      nVertices = 5
      opacity [set every repeat] = opacity_8
      pos [set every repeat] = (x_pos[8], y_pos[8])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = search_conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'target_color': 'black', 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 1, 'opacity_5': 1, 'opacity_6': 1, 'opacity_7': 1, 'opacity_8': 1, 'n_distract': 8},
      {'target_color': 'black', 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 1, 'opacity_5': 1, 'opacity_6': 1, 'opacity_7': 1, 'opacity_8': 0, 'n_distract': 7},
      {'target_color': 'black', 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 1, 'opacity_5': 1, 'opacity_6': 1, 'opacity_7': 0, 'opacity_8': 0, 'n_distract': 6},
      {'target_color': 'black', 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 1, 'opacity_5': 1, 'opacity_6': 0, 'opacity_7': 0, 'opacity_8': 0, 'n_distract': 5},
      {'target_color': 'black', 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 1, 'opacity_5': 0, 'opacity_6': 0, 'opacity_7': 0, 'opacity_8': 0, 'n_distract': 4},
      {'target_color': 'black', 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 0, 'opacity_5': 0, 'opacity_6': 0, 'opacity_7': 0, 'opacity_8': 0, 'n_distract': 3},
      {'target_color': 'black', 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 0, 'opacity_4': 0, 'opacity_5': 0, 'opacity_6': 0, 'opacity_7': 0, 'opacity_8': 0, 'n_distract': 2},
      {'target_color': 'black', 'opacity_1': 1, 'opacity_2': 0, 'opacity_3': 0, 'opacity_4': 0, 'opacity_5': 0, 'opacity_6': 0, 'opacity_7': 0, 'opacity_8': 0, 'n_distract': 1}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
    Routine instruct
    Routine ITI
    Routine trial
  LoopTerminator trials
