PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = posner_withExtras
  eyetracker = MouseGaze
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = ('RIGHT_BUTTON',)
  mgSaccade = 0.5
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Routines
  Routine trial
    PolygonComponent cue
      durationEstim = 0.2
      fillColor = $[1,1,1]
      nVertices = 3
      ori [set every repeat] = cueOri
      shape = triangle
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 12
      units = height
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    PolygonComponent target
      fillColor = MediumSeaGreen
      lineColor = SeaGreen
      pos [set every repeat] = (targetX, 0)
      shape = regular polygon...
      size = (0.2,0.2)
      startEstim = 0.2
      startVal [frame N] = 12
      units = height
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    RegionOfInterestComponent targetROI
      debug = False
      endRoutineOn = look at
      lookDur = 100
      nVertices = 4
      ori = 0
      pos [set every repeat] = (targetX, 0)
      save = every look
      shape = regular polygon...
      size = (0.2,0.2)
      startVal [time (s)] = 0.2
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    EyetrackerRecordComponent targetET
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine instruct
    TextComponent instructText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press the left and right keys as
        to indicate the side where
        you saw the green square.

        Try to respond as quickly and accurately as you can.

        Press any key when you're ready to start
    KeyboardComponent instructEnd
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        defaultKeyboard = keyboard.Keyboard()
  Routine thanks
  Routine ITI
    PolygonComponent fixationITI
      fillColor = white
      lineWidth = 2
      nVertices = 20
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    EyetrackerRecordComponent ITIeyes
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    RegionOfInterestComponent ITI_roi
      debug = False
      endRoutineOn = look at
      lookDur = 500
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = first look
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent polygon_2
      fillColor = white
      pos [set every frame] = ITIeyes.pos
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine fixate
    EyetrackerRecordComponent etRecord
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    RegionOfInterestComponent roi
      debug = False
      endRoutineOn = look at
      lookDur = 100
      nVertices = 4
      ori = 0
      pos = (0.3, 0)
      save = every look
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent polygon
      fillColor = white
      pos [set every frame] = etRecord.pos
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    units = from exp settings
  Routine calibration_placeholder
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = This will eb a calibration routine when we can add to several places on flow
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  Routine showGaze
    TextComponent eyetrackingTxt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = In this experiment we will be tracking your eyes. This triangle shows where your eyes are looking. Click anywhere with the left mouse key to continue.
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    PolygonComponent trackingShape
      fillColor = black
      pos [set every frame] = recordEyes.pos
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    EyetrackerRecordComponent recordEyes
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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  Routine countLooks
    EyetrackerRecordComponent etRecord_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      syncScreenRefresh = False
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    RegionOfInterestComponent roi_2
      debug = False
      endRoutineOn = none
      lookDur = 100
      nVertices = 4
      ori = 0
      pos = (0.4, 0)
      save = every look
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent polygon_4
      fillColor = white
      pos = (0.4, 0)
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent trackingPoly
      fillColor = black
      pos [set every frame] = etRecord_2.pos
      shape = triangle
      size = (0.1 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = red
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = white
    innerFillColor = green
    innerRadius = 0.0033
    movementAnimation = True
    movementDur = 1.25
    outerRadius = 0.1
    progressMode = time
    randomisePos = True
    saveAsImg = True
    showResults = True
    targetDelay = 1.25
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  Routine instruct
  Routine showGaze
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'cueSide': 'right', 'corrAns': 'right', 'targetX': 500, 'cueOri': 90},
      {'cueSide': 'right', 'corrAns': 'right', 'targetX': 500, 'cueOri': 90},
      {'cueSide': 'right', 'corrAns': 'right', 'targetX': 500, 'cueOri': 90},
      {'cueSide': 'right', 'corrAns': 'right', 'targetX': 500, 'cueOri': 90},
      {'cueSide': 'left', 'corrAns': 'left', 'targetX': -500, 'cueOri': -90},
      {'cueSide': 'left', 'corrAns': 'left', 'targetX': -500, 'cueOri': -90},
      {'cueSide': 'left', 'corrAns': 'left', 'targetX': -500, 'cueOri': -90},
      {'cueSide': 'left', 'corrAns': 'left', 'targetX': -500, 'cueOri': -90},
      {'cueSide': 'left', 'corrAns': 'right', 'targetX': 500, 'cueOri': -90},
      {'cueSide': 'right', 'corrAns': 'left', 'targetX': -500, 'cueOri': 90}]
    Routine ITI
    Routine trial
  LoopTerminator trials
  Routine thanks
