PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[-1, -1, -1]
  expName = stroop2
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Routines
  Routine trial
    TextboxComponent stim
      bold = False
      color [set every repeat] = $letterColor
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent resp
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instruct
    TextboxComponent instrText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextboxComponent thanksText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'word': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
      {'word': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'word': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
      {'word': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
      {'word': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'word': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
    Routine trial
  LoopTerminator trials
  Routine thanks
