PsychoPy2experiment version="2021.2.0"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {'age': '', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = stroop
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Routines
  Routine trial
    TextboxComponent stim
      bold = False
      color [set every repeat] = $letterColor
      editable = False
      letterHeight = 0.05
      padding = None
      size = (None, None)
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent resp
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instruct
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextboxComponent instrucText
      bold = False
      borderColor = white
      editable = False
      fillColor = white
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself. Press:
            Left for red WORDS
            Down for green WORDS
            Right for blue WORDS
           (Esc will quit)

        Press any key to continue
  Routine thanks
    TextboxComponent thanksNew
      bold = False
      borderColor = white
      editable = False
      fillColor = white
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'word': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
      {'word': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'word': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
      {'word': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
      {'word': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'word': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
    Routine trial
  LoopTerminator trials
  Routine thanks
