PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [2560, 1440]
  expName = GFMT_short
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Routines
  Routine trial
    ImageComponent faces
      image [set every repeat] = $imageFile
      startVal [time (s)] = 0.0
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine instruct
    TextboxComponent instrText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        In this task you need to decide whether or not the two images are the same person or two different people

        You can take as long as like to make your decision

        You will need to press the arrow keys on your keyboard:

            left = same
            right = different

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine readyMain
    TextboxComponent readyText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Practice is over! Ready for the real thing?

        Press a key to continue
    KeyboardComponent readyKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instruct
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = practiceConds.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imageFile', 'same/020_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/025_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/303_DV_C2.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'different/013_235_R.jpg'), ('corrAns', 'right'), ('sameOrDiff', 'different')]),
      OrderedDict([('imageFile', 'different/019_074_L.jpg'), ('corrAns', 'right'), ('sameOrDiff', 'different')]),
      OrderedDict([('imageFile', 'different/025_235_L.jpg'), ('corrAns', 'right'), ('sameOrDiff', 'different')])]
    Routine trial
  LoopTerminator practice
  Routine readyMain
  LoopInitiator main loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'same/020_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/025_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/068_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/069_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/074_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/075_DV_C2.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/081_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/085_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/092_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/102_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/108_DV_C2.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/115_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/120_DV_C2.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/129_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/136_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/139_DV_C2.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/168_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/170_DV_C2.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'},
      {'imageFile': 'same/235_C2_DV.jpg', 'sameOrDiff': 'same', 'corrAns': 'left'}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
    Routine trial
  LoopTerminator main
