PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1280, 800]
  expName = gazeCueing2
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Routines
  Routine instruct
    TextboxComponent instructText
      bold = False
      editable = False
      letterHeight = 1
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Press the left and right keys to indicate the side where you saw the green square.

        Note that the eyes are NOT helping you here - they will indicate the correct direction on only half the trials.

        Try to respond as quickly and accurately as you can.

        Press any key when you're ready to start
    KeyboardComponent instructEnd
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      units = deg
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    StaticComponent imageLoading
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine trial
    ImageComponent cue
      durationEstim = 0.2
      image [set during: ITI.imageLoading] = $cueImage
      startVal [time (s)] = 0
      stopVal [frame N] = 12
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    PolygonComponent target
      fillColor = MediumSeaGreen
      lineColor = SeaGreen
      pos [set every repeat] = (targetX, 0)
      shape = regular polygon...
      size = (200,200)
      startEstim = 0.2
      startVal [frame N] = 12
      stopVal [duration (s)] = 1.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startEstim = 0.2
      startVal [frame N] = 12
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  Routine thanks
    TextboxComponent thanksTxt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = That is the end - thanks!
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'cueSide': 'right', 'cueImage': 'eyesRight.jpg', 'targetX': 500, 'corrAns': 'right', 'valid': 1},
      {'cueSide': 'right', 'cueImage': 'eyesRight.jpg', 'targetX': 500, 'corrAns': 'right', 'valid': 1},
      {'cueSide': 'right', 'cueImage': 'eyesRight.jpg', 'targetX': -500, 'corrAns': 'left', 'valid': 0},
      {'cueSide': 'right', 'cueImage': 'eyesRight.jpg', 'targetX': -500, 'corrAns': 'left', 'valid': 0},
      {'cueSide': 'left', 'cueImage': 'eyesLeft.jpg', 'targetX': -500, 'corrAns': 'left', 'valid': 1},
      {'cueSide': 'left', 'cueImage': 'eyesLeft.jpg', 'targetX': -500, 'corrAns': 'left', 'valid': 1},
      {'cueSide': 'left', 'cueImage': 'eyesLeft.jpg', 'targetX': 500, 'corrAns': 'right', 'valid': 0},
      {'cueSide': 'left', 'cueImage': 'eyesLeft.jpg', 'targetX': 500, 'corrAns': 'right', 'valid': 0}]
    Routine ITI
    Routine trial
  LoopTerminator trials
  Routine thanks
