PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  expName = GFMT_short
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Routines
  Routine trial
    ImageComponent faces
      image [set every repeat] = $imageFile
      startVal [time (s)] = 0.0
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    ButtonComponent same
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.6, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = SAME
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    ButtonComponent different
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.6, 0)
      size = (0.4, 0.1)
      startVal [time (s)] = 0
      text = DIFFERENT
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  Routine instruct
    TextboxComponent instrText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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      text:
        In this task you need to decide whether or not the two images are the same person or two different people

        You can take as long as like to make your decision

        You will need to press the buttons on the left and right of the screen to say if te images are the same or different
    ButtonComponent readyButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.8, 0.1)
      startVal [time (s)] = 0
      text = Click here to start
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'same/020_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/025_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/068_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/069_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/074_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/075_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/081_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/085_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/092_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/102_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/108_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/115_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/120_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/129_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/136_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/139_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/168_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/170_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/235_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'}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
    Routine trial
  LoopTerminator trials
  Routine thanks
