PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop2
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Routines
  Routine trial
    TextboxComponent stim
      bold = False
      color [set every repeat] = $letterColor
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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    KeyboardComponent resp
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    TextboxComponent progresstext
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.4, 0.4)
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(currentLoop.thisN)+ "/" + str(currentLoop.nTotal)
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  Routine instructPractice
    TextboxComponent instructsPracText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        When the words appear, press:

          Left for red LETTERS
          Down for green LETTERS
          Right for blue LETTERS (Esc will quit)

        Press any key to continue
    KeyboardComponent readyInstructs
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent setMsg
      Code Type = Auto->JS
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      Begin Experiment:
        corr = []
      Begin Routine:
        if resp.corr:  # stored on last run routine
          msg="Correct! RT= " + str(round(resp.rt, 3))
        else:
          msg="Oops! That was wrong"

        # track (up to) the last 5 trials
        corr.append(resp.corr)
        nCorr = sum(corr[-5:])
        nResps = len(corr[-5:])
        msg += '\n'+str(nCorr) + ' out of ' + str(nResps) + ' correct.'

        if nCorr >= 4:
          practice.finished = True
    TextboxComponent feedbackMsg
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine instruct
    TextboxComponent instrText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextboxComponent thanksText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'text': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 'cong'},
      {'text': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 'cong'},
      {'text': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 'incong'},
      {'text': 'red', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 'incong'},
      {'text': 'green', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 'incong'},
      {'text': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 'cong'},
      {'text': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 'cong'},
      {'text': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 'incong'},
      {'text': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 'incong'},
      {'text': 'blue', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 'incong'},
      {'text': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 'cong'},
      {'text': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 'cong'}]
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'text': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 'cong'},
      {'text': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 'cong'},
      {'text': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 'incong'},
      {'text': 'red', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 'incong'},
      {'text': 'green', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 'incong'},
      {'text': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 'cong'},
      {'text': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 'cong'},
      {'text': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 'incong'},
      {'text': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 'incong'},
      {'text': 'blue', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 'incong'},
      {'text': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 'cong'},
      {'text': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 'cong'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
