PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = cheerfulness-NEO
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Routines
  Routine trial
    FormComponent form
      Data Format = rows
      Item Padding = 0.05
      Items = cheerfulness-scored.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1.5, 0.7)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -.4)
      startVal [condition] = form.complete
      text = Click here to submit!
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Flow
  Routine trial
