PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = muller-lyer
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Routines
  Routine trial
    PolygonComponent refLine
      fillColor = white
      pos = (0, .4)
      shape = regular polygon...
      size [set every repeat] = (lineLength, 0.01)
      startVal [time (s)] = 0.0
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    ImageComponent leftArrow
      image = arrow-head.png
      ori [set every repeat] = leftArrowOri
      pos [set every repeat] = (refLine.size[0]/2*-1, .4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent rightArrow
      image = arrow-head.png
      ori [set every repeat] = rightArrowOri
      pos [set every repeat] = (refLine.size[0]/2, .4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent adjustableLine
      fillColor = white
      pos [set every frame] = (posSlider.markerPos, .2)
      shape = regular polygon...
      size [set every frame] = (slider.markerPos, 0.01)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = "Shorter", "Longer"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45', 'triangleMarker')
      styles = rating
      ticks = (0.1, 1.5)
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -.4)
      size = (0.4, 0.05)
      startVal [condition] = slider.rating
      text = Click here to submit size
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    CodeComponent checkAcc
      Code Type = Auto->JS
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      Begin Routine:
        slider.rating = 0.7
        posSlider.rating = 0
      End Routine:
        accuracy = slider.rating - lineLength

        thisExp.addData('accuracy', accuracy)

        # if the x position of the refLine is 0 on every trial then our posSlider rating is itself the measure of accuracy
        thisExp.addData('posaccuracy ', posSlider.rating)
    SliderComponent posSlider
      forceEndRoutine = False
      granularity = 0
      labels = "Leftward", "Rightward"
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45', 'triangleMarker')
      styles = rating
      ticks = (-.5, .5)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'lineLength': 0.1, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 0.2, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 0.3, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 0.4, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 0.5, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 0.6, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 0.7, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 0.8, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 0.9, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 1, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 1.2, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 1.3, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 1.4, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 1.5, 'leftArrowOri': 0, 'rightArrowOri': 0, 'label': 'left'},
      {'lineLength': 0.1, 'leftArrowOri': 180, 'rightArrowOri': 180, 'label': 'right'},
      {'lineLength': 0.2, 'leftArrowOri': 180, 'rightArrowOri': 180, 'label': 'right'},
      {'lineLength': 0.3, 'leftArrowOri': 180, 'rightArrowOri': 180, 'label': 'right'},
      {'lineLength': 0.4, 'leftArrowOri': 180, 'rightArrowOri': 180, 'label': 'right'},
      {'lineLength': 0.5, 'leftArrowOri': 180, 'rightArrowOri': 180, 'label': 'right'}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
    Routine trial
  LoopTerminator trials
