PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sound-slider
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Routines
  Routine trial
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "quieter", "louder"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        thisVolume = 0.1
      Each Frame:
        if slider.markerPos:
            thisVolume = slider.markerPos
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      volume [set every frame] = thisVolume
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Flow
  Routine trial
