PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = temperature-slider
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Routines
  Routine trial
    SliderComponent slider
      fillColor [set every frame] = $thisCol
      forceEndRoutine = True
      granularity = 0
      labels = "cold", "hot"
      letterHeight = 0.05
      ori = 90
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
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    CodeComponent setColor
      Code Type = Auto->JS
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      Begin Routine:
        thisCol = [-1, -1, -1]
      Each Frame:
        if slider.markerPos:
            thisCol = [slider.markerPos, 0, 1-slider.markerPos]
            print(thisCol)
Flow
  Routine trial
